PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = ExperimentMonitor
  Resources = ['stimuli/redesign/digitspan_background.png', 'stimuli/redesign/i1.png', 'stimuli/redesign/i2.png', 'stimuli/redesign/i3.png', 'stimuli/redesign/plain.png', 'spreadsheets/choose_digitSpan.xlsx', 'spreadsheets/conditions.xlsx', 'spreadsheets/eight.xlsx', 'spreadsheets/eleven.xlsx', 'spreadsheets/five.xlsx', 'spreadsheets/four.xlsx', 'spreadsheets/nine.xlsx', 'spreadsheets/seven.xlsx', 'spreadsheets/six.xlsx', 'spreadsheets/ten.xlsx', 'spreadsheets/three.xlsx', 'spreadsheets/twelve.xlsx', 'stimuli/backButtonImage.png', 'stimuli/continue_button.png', 'stimuli/nextButtonImage.png', 'stimuli/startButtonImage.png']
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  backgroundFit = fill
  expName = Digit_Span
  exportHTML = on Save
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Instruction
    ImageComponent backimg
      image = stimuli/redesign/digitspan_background.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        slideN = 1

        maxSlideN = 2
        minSlideN = 1
      End Routine:
        if 'backButton' in mouse_2.clicked_name:
            slideN -= 1
        elif 'nextButton' in mouse_2.clicked_name:
            slideN += 1
        elif 'start' in mouse_2.clicked_name:
            Instruct_Loop.finished = True

        # Constrain slideN within the valid range
        if slideN < minSlideN:
            slideN = minSlideN
        elif slideN > maxSlideN:
            slideN = maxSlideN
    ImageComponent i1
      image [set every frame] = $'stimuli/redesign/i'+ str(slideN) + '.png'
      size = (1.5,0.55)
      startVal [time (s)] = 0.0
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    TextComponent i1_txt
      color = -0.6157, -0.6706, -0.0196
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(slideN) + '/' + str(maxSlideN)
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    ImageComponent backButton
      image = stimuli/backButtonImage.png
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
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    ImageComponent nextButton
      image = stimuli/nextButtonImage.png
      pos = (0.25, -0.3)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = backButton,nextButton,start
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent start
      image = stimuli/startButtonImage.png
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
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  Routine Instruction2
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        slideN = 1
        instruct_txt = '在這個實驗中，\n\n你需要嘗試記住螢幕上顯示的數字。\n\n所有數字都在0到9之間。\n\n你會看到一串數字，依序顯示\n\n請記住整串數字'

        maxSlideN = 2
        minSlideN = 1
      End Routine:
        if 'backButton_2' in mouse_3.clicked_name:
            slideN -= 1
        elif 'nextButton_2' in mouse_3.clicked_name:
            slideN += 1
        elif 'start_2' in mouse_3.clicked_name:
            Instruct_Loop.finished = True

        # Constrain slideN within the valid range
        if slideN < minSlideN:
            slideN = minSlideN
        elif slideN > maxSlideN:
            slideN = maxSlideN

        if slideN == 1:
            instruct_txt = '在這個實驗中，\n\n你需要嘗試記住螢幕上顯示的數字。\n\n所有數字都在0到9之間。\n\n你會看到一串數字，依序顯示\n\n請記住整串數字'
        elif slideN == 2:
            instruct_txt = '一旦你記住這些數字後，你需要重述它們。\n\n在方塊中輸入剛剛顯示過的數字\n\n完成後請按 送出答案'
    ImageComponent backimg_2
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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
    TextComponent i2_txt
      color = -0.6157, -0.6706, -0.0196
      font = Microsoft JhengHei
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_txt
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    TextComponent pgnum
      color = -0.6157, -0.6706, -0.0196
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(slideN) + '/' + str(maxSlideN)
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent backButton_2
      image = stimuli/backButtonImage.png
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_2
      image = stimuli/nextButtonImage.png
      pos = (0.25, -0.3)
      startVal [time (s)] = 0.0
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    ImageComponent start_2
      image = stimuli/startButtonImage.png
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = backButton_2,nextButton_2,start_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Instruction3
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    ImageComponent image_3
      image = C:/Users/fuchi/Documents/PsychoPy/DigitSpan/stimuli/redesign/i3.png
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Digit_code
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Define image paths
        digitImages = [
            'stimuli/digit0.png', 'stimuli/digit1.png', 'stimuli/digit2.png',
            'stimuli/digit3.png', 'stimuli/digit4.png', 'stimuli/digit5.png',
            'stimuli/digit6.png', 'stimuli/digit7.png', 'stimuli/digit8.png',
            'stimuli/digit9.png'
        ]

        # Define positions (x, y) for each digit
        digitPositions = [
            (-0.5, 0.3), (0, 0.3), (0.5, 0.3),    # Top row
            (-0.5, 0.1), (0, 0.1), (0.5, 0.1),    # Middle row
            (-0.5, -0.1), (0, -0.1), (0.5, -0.1), # Bottom row
            (0, -0.3)                             # Zero in the bottom center
        ]

        # Define size (width, height) for each digit
        digitSize = (0.1, 0.1)  # Adjust as needed for your design

        # Create a list to hold the ImageStim objects
        digitStimuli = []

        # Loop through each digit image and create an ImageStim object
        for i in range(10):
            digitStimuli.append(
                visual.ImageStim(
                    win=win,
                    image=digitImages[i],
                    pos=digitPositions[i],
                    size=digitSize,
                    units='height',
                    name=f'digit{i}'  # Unique name for each stimulus
                )
            )
  Routine Digit_Presentation
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    ImageComponent backimg_3
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image
      image = stimuli/redesign/plain.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.1
      pos = (0, 0.005)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine reset_correct
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        correct_at_this_level = 0
  Routine Feedback
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    ImageComponent backimg_5
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent feedback_txt
      color = -0.6157, -0.6706, -0.0196
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fbTxt
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  Routine End
    ImageComponent backimg_6
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    TextComponent Thank_you
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'您能夠記住的數列共有 ' + str(last_level-1) + '個'
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
  Routine Response_image_
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    ImageComponent digit
      image = stimuli/redesign/digit1.png
      pos = (-0.2, 0.35)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_2
      image = stimuli/redesign/digit2.png
      pos = (0, 0.35)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_3
      image = stimuli/redesign/digit3.png
      pos = (0.2, 0.345)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_4
      image = stimuli/redesign/digit4.png
      pos = (-0.2, 0.2)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_5
      image = stimuli/redesign/digit5.png
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent digit_6
      image = stimuli/redesign/digit6.png
      pos = (0.20, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent digit_7
      image = stimuli/redesign/digit7.png
      pos = (-0.2, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent digit_8
      image = stimuli/redesign/digit8.png
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent digit_9
      image = stimuli/redesign/digit9.png
      pos = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent digit_10
      image = stimuli/redesign/digit0.png
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        numlist=['0','1','2','3','4','5','6','7','8','9']
  Routine Recall
    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize variables
        entered_text = ''
        # Reset the TextBox text
        textbox.setText('')
      Each Frame:
        # Check for key presses
        keys = event.getKeys()
        for key in keys:
            if key in ['0', '1', '2', '3', '4', '5', '6', '7', '8', '9']:
                entered_text += key
                textbox.setText(entered_text)
            elif key == 'backspace':
                entered_text = entered_text[:-1]
                textbox.setText(entered_text)
            elif key == 'return':
                # End the routine when Enter is pressed
                continueRoutine = False
      End Routine:
        if textbox.text == str(digits):
            correct = 1

            # go to next level
            trials.finished = True
            fbTxt = '答對了!'
        else:
            correct = 0
            fbTxt = '答錯了!'
        thisExp.addData('correct', correct)

        correct_at_this_level += correct

        if trials.thisN+1 == trials.nTotal and correct_at_this_level != trials.nTotal:
            # end level and blocks
            last_level = level
            trials.finished = True
            blocks.finished = True
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    ImageComponent backimg_4
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    TextComponent recall_txt
      color = -0.6157, -0.6706, -0.0196
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = 請試著回想剛剛出現的數字
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    TextboxComponent textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -0.6078, -0.6706, -0.0118
      editable = False
      letterHeight = 0.05
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent continue_button
      image = stimuli/redesign/continue_button.png
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = continue_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent submitkey
      allowedKeys = 'return'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator Instruct_Loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 500
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    Routine Instruction2
  LoopTerminator Instruct_Loop
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = spreadsheets/choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    conditions:
      [{'condition_file': 'three.xlsx', 'level': 3},
      {'condition_file': 'four.xlsx', 'level': 4},
      {'condition_file': 'five.xlsx', 'level': 5},
      {'condition_file': 'six.xlsx', 'level': 6},
      {'condition_file': 'seven.xlsx', 'level': 7},
      {'condition_file': 'eight.xlsx', 'level': 8},
      {'condition_file': 'nine.xlsx', 'level': 9},
      {'condition_file': 'ten.xlsx', 'level': 10},
      {'condition_file': 'eleven.xlsx', 'level': 11},
      {'condition_file': 'twelve.xlsx', 'level': 12}]
    Routine reset_correct
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $'spreadsheets/'+condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan
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        Routine Digit_Presentation
      LoopTerminator digitLoop
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
